<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>The pre-training rig check (PROTOTYPE). Which devices it checks comes from this machine's rig.yml: each SelectMany starts one branch per entry RigCheckDevices lists, and nothing for a kind the rig does not declare. Each branch writes raw rows (Device,Measure,Value,Detail); coen_rig_check.judge applies the thresholds.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ConfigRoot" Description="The folder holding &lt;MACHINE&gt;\rig.yml; a launch property." />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="RawFile" Description="Where the raw rows go; a launch property." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:RigCheckDevices">
          <p1:ConfigRoot>C:\Coen-Lab-Local\RigConfigs</p1:ConfigRoot>
          <p1:Kinds>behaviorBoard,timestampGeneratorGen3,stepperDriver,licketySplit</p1:Kinds>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Check Harp Boards</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>HarpEntry</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpEntry</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" Selector="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpEntry</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Device" Selector="Name" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CheckDevice">
                <p1:Measure>messages</p1:Measure>
                <p1:Warmup>1</p1:Warmup>
                <p1:Seconds>3</p1:Seconds>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:RigCheckDevices">
          <p1:ConfigRoot>C:\Coen-Lab-Local\RigConfigs</p1:ConfigRoot>
          <p1:Kinds>camera</p1:Kinds>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Check Cameras</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>CameraEntry</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraEntry</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SerialNumber" Selector="SerialNumber" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="spk:SpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:SerialNumber />
                <spk:ColorProcessing>Default</spk:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraEntry</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Device" Selector="Name" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CheckDevice">
                <p1:Measure>frames</p1:Measure>
                <p1:Warmup>2</p1:Warmup>
                <p1:Seconds>5</p1:Seconds>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>rig-check-raw.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="7" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
